PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = sept 15 class
  keyboardBackend = ioHub
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Routines
  Routine trial
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        distractors = []

        if random() < 1/2:
            num = 10
            thisExp.addData("number of distractors", num)
        else:
            num = 5
            thisExp.addData("number of distractors", num)

        for i in range(num):
            distractor = visual.TextStim(win=win, name='distractor',
            text=' L',
            font='Open Sans',
            pos=(random() - 0.5, random() - 0.5), height=0.05, wrapWidth=None, ori=0.0,
            color='white', colorSpace='rgb', opacity=None,
            languageStyle='LTR',
            depth=-2.0);

            distractors.append(distractor)

        for d in distractors:
            d.setAutoDraw(True)
      End Routine:
        for d in distractors:
            d.setAutoDraw(False)
    PolygonComponent fixation
      fillColor = white
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent target
      letterHeight = 0.05
      pos [set every repeat] = (random ()-0.5, random ()-0.5)
      startVal [time (s)] = 0.0
      text = T
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    TextComponent distractor
      disabled = True
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text =  L
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    MouseComponent mouse
      clickable = target
      forceEndRoutineOnPress = valid click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 200
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    Routine trial
  LoopTerminator trials
